# Generated by Configurator on Wed Feb 21 19:03:34 CET 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,Camera,IDS_uEye,IDS uEye

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Camera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Settings
# Preset: StartupPresets
ConfigGroup,Settings,StartupPresets,Camera,Binning,1x1 (0)
ConfigGroup,Settings,StartupPresets,Camera,DropPixels,0
ConfigGroup,Settings,StartupPresets,Camera,Exposure,99.9896
ConfigGroup,Settings,StartupPresets,Camera,FractionOfPixelsToDropOrSaturate,0.0020
ConfigGroup,Settings,StartupPresets,Camera,Frame Rate,3.5224
ConfigGroup,Settings,StartupPresets,Camera,Gain,0
ConfigGroup,Settings,StartupPresets,Camera,Offset,0
ConfigGroup,Settings,StartupPresets,Camera,Pixel Clock,24.0000
ConfigGroup,Settings,StartupPresets,Camera,PixelType,8bit RGBA
ConfigGroup,Settings,StartupPresets,Camera,ReadoutTime,0.0000
ConfigGroup,Settings,StartupPresets,Camera,TransposeCorrection,0
ConfigGroup,Settings,StartupPresets,Camera,TransposeMirrorX,0
ConfigGroup,Settings,StartupPresets,Camera,TransposeMirrorY,0
ConfigGroup,Settings,StartupPresets,Camera,TransposeXY,0
ConfigGroup,Settings,StartupPresets,Camera,Trigger,internal
ConfigGroup,Settings,StartupPresets,Camera,TriggerDevice,



# PixelSize settings

